PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1200, 600]
  expName = Impulsivity and cigarette smoking
  keyboardBackend = ioHub
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Routines
  Routine trial
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    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 1.0
      text [set every repeat] = $"INR " + str(reward_today)+ " today"+ " or" + " INR " +str(future_reward) + " after" + str(delay) + "days"
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    KeyboardComponent key_resp
      allowedKeys = 't','l'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Impulsivity and cigarette smoking/Impulsivity and cigarette smoking.xlsx
    loopType = random
    nReps = 2
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    conditions:
      [{'reward_today': 50, 'future_reward': 100, 'delay': 90},
      {'reward_today': 30, 'future_reward': 40, 'delay': 30},
      {'reward_today': 20, 'future_reward': 30, 'delay': 55},
      {'reward_today': 70, 'future_reward': 120, 'delay': 100},
      {'reward_today': 40, 'future_reward': 50, 'delay': 75},
      {'reward_today': 25, 'future_reward': 35, 'delay': 20},
      {'reward_today': 100, 'future_reward': 110, 'delay': 78},
      {'reward_today': 35, 'future_reward': 65, 'delay': 80},
      {'reward_today': 22, 'future_reward': 150, 'delay': 30},
      {'reward_today': 45, 'future_reward': 60, 'delay': 40},
      {'reward_today': 75, 'future_reward': 100, 'delay': 50},
      {'reward_today': 130, 'future_reward': 70, 'delay': 100}]
    Routine trial
  LoopTerminator trials
